PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 10.5_Progressive_Ratio
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Routines
  Routine PRTInstructions
    PolygonComponent PRTIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent PRTIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PRTIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Keep yourself ready for this game!

        Be ready to put your left index and middle finger on 'f' and 'v'

        And right index and middle finger on 'j' and 'n' respectively!

        Press Spacebar to continue
  Routine Black500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine PRTTest
    PolygonComponent PRTPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent PRTRight
      fillColor = black
      pos [set every repeat] = $(pxR, pyR)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent PRTTop
      fillColor = black
      pos [set every repeat] = $(pxU, pyU)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent PRTLeft
      fillColor = black
      pos [set every repeat] = $(pxL, pyL)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent PRTDown
      fillColor = black
      pos [set every repeat] = $(pxD, pyD)
      shape = rectangle
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
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    KeyboardComponent PRTKey
      allowedKeys = 'left', 'right', 'up', 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine PRTInstructions
  Routine Black500
  LoopInitiator PRTLoop loopType="TrialHandler"
    conditionsFile = 10.5_stimuli_progressive_ratio.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pxD', -0.3), ('pyD', 0.0), ('pxU', 0.0), ('pyU', -0.3), ('pxL', 0.0), ('pyL', 0.3), ('pxR', 0.3), ('pyR', 0.0)]),
      OrderedDict([('pxD', 0.3), ('pyD', 0.0), ('pxU', -0.3), ('pyU', 0.0), ('pxL', 0.0), ('pyL', -0.3), ('pxR', 0.0), ('pyR', 0.3)]),
      OrderedDict([('pxD', 0.0), ('pyD', 0.3), ('pxU', 0.3), ('pyU', 0.0), ('pxL', -0.3), ('pyL', 0.0), ('pxR', 0.0), ('pyR', -0.3)]),
      OrderedDict([('pxD', 0.0), ('pyD', -0.3), ('pxU', 0.0), ('pyU', 0.3), ('pxL', 0.3), ('pyL', 0.0), ('pxR', -0.3), ('pyR', 0.0)]),
      OrderedDict([('pxD', -0.3), ('pyD', 0.0), ('pxU', 0.0), ('pyU', -0.3), ('pxL', 0.0), ('pyL', 0.3), ('pxR', 0.3), ('pyR', 0.0)]),
      OrderedDict([('pxD', 0.3), ('pyD', 0.0), ('pxU', -0.3), ('pyU', 0.0), ('pxL', 0.0), ('pyL', -0.3), ('pxR', 0.0), ('pyR', 0.3)]),
      OrderedDict([('pxD', 0.0), ('pyD', 0.3), ('pxU', 0.3), ('pyU', 0.0), ('pxL', -0.3), ('pyL', 0.0), ('pxR', 0.0), ('pyR', -0.3)]),
      OrderedDict([('pxD', 0.0), ('pyD', -0.3), ('pxU', 0.0), ('pyU', 0.3), ('pxL', 0.3), ('pyL', 0.0), ('pxR', -0.3), ('pyR', 0.0)]),
      OrderedDict([('pxD', -0.3), ('pyD', 0.0), ('pxU', 0.0), ('pyU', -0.3), ('pxL', 0.0), ('pyL', 0.3), ('pxR', 0.3), ('pyR', 0.0)]),
      OrderedDict([('pxD', 0.3), ('pyD', 0.0), ('pxU', -0.3), ('pyU', 0.0), ('pxL', 0.0), ('pyL', -0.3), ('pxR', 0.0), ('pyR', 0.3)]),
      OrderedDict([('pxD', 0.0), ('pyD', 0.3), ('pxU', 0.3), ('pyU', 0.0), ('pxL', -0.3), ('pyL', 0.0), ('pxR', 0.0), ('pyR', -0.3)])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
    Routine PRTTest
    Routine Black500
  LoopTerminator PRTLoop
  Routine Black500
