PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 11_Reinforcement_Learning_With_Stroop
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Routines
  Routine WelcomeScreen
    PolygonComponent WelcomePolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment

        Press Spacebar to continue
    KeyboardComponent WelcomeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    PolygonComponent BlankPolygon500
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine MEInstructions
    PolygonComponent MEPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent METext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this module

        Please select the most appropriate emotion that you are feeling after the image viewing

        Press Spacebar to continue
    KeyboardComponent MEKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine METest
    PolygonComponent METPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent METImage
      image [set every repeat] = $ImageFile
      pos = (0, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent METKey
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent METSituation
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ParticipantCaption
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    TextComponent METFeel
      color = green
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        (Press the corresponding number of the emotion)
        Seeing the situation, you feel:
    TextComponent METEmotion
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $EmotionList
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  Routine EndScreen
    PolygonComponent EndPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent EndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thank you for taking part in the experiment.

        Please do not press any key, the experiment will end on its own.
  Routine DoGInstructions
    PolygonComponent DoGPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent DoGInstText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        welcome to the experiment

        Please select the option which you will choose if in real time situation

        A -> For left side choice

        L -> For right side choice

        Press Spacebar to continue
    KeyboardComponent DoGInstKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DoGPreferredSnack
    PolygonComponent DPSPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent DPSText
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Which of these is your prefered snack amongst the options?

        Select only one
    TextComponent DPSChoiceText
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        1. Samosa
        2. Vada Pav
        3. Bhaji
        4. Oreos
        5. Kachori
        6. Poha
        7. Momos
        8. Papad
    KeyboardComponent DPSKey
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DoGTest
    PolygonComponent DoGpolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent DoGChoice
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Choose one:
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    TextComponent DoGFixed
      color = yellow
      font = Georgia
      letterHeight = 0.03
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $FixedEntry
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    PolygonComponent DoGFixedPoly
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent DoGVariable
      color = yellow
      font = Georgia
      letterHeight = 0.03
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $VariableEntry
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    PolygonComponent DoGVariablePoly
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent DoGKey
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DDTInstructions
    PolygonComponent DDTInstPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent DDTInstText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        welcome to the experiment

        Please select the option which you will choose if in real time situation

        A -> For left side choice

        L -> For right side choice

        Press Spacebar to continue
    KeyboardComponent DDTInstKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DDTTest
    PolygonComponent DDTPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent DDTChoice
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Choose one:
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    TextComponent DDTFixed
      color = yellow
      font = Georgia
      letterHeight = 0.03
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $FixedEntry
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    PolygonComponent DDTFixedPoly
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent DDTVariable
      color = yellow
      font = Georgia
      letterHeight = 0.03
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $VariableEntry
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    PolygonComponent DDTVariablePoly
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent DDTKey
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FCSRInstructions
    PolygonComponent polygonfcsr
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textfcsr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Keep yourself ready for this game!

        Be ready to put your left index and middle finger on 'f' and 'v'

        And right index and middle finger on 'j' and 'n' respectively!

        Press Spacebar to continue
    KeyboardComponent keyfcsr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FCSRReady
    PolygonComponent polygonfcsrr
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textfcsrr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Ready!

        Put your Left Index finger and Middle finger on 'F' and 'V' respectively

        Put your Right Index finger and Middle finger on 'J' and 'N' respectively


        When you are ready, press 'f' to continue
    KeyboardComponent keyfcsrr
      allowedKeys = 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Boxes
    PolygonComponent BGPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent LeftTop
      pos = (-0.3, 0.3)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent RightTop
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent LeftDown
      pos = (-0.3, -0.3)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent RightDown
      pos = (0.3, -0.3)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Stimuli
    PolygonComponent StiBGPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    PolygonComponent TopLeft
      pos = (-0.3, 0.3)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent TopRight
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent BottomLeft
      pos = (-0.3, -0.3)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent BottomRight
      pos = (0.3, -0.3)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent FCSRStim
      image [set every repeat] = $ImageFile
      pos [set every repeat] = $(px, py)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent FCSRKey
      allowedKeys = 'f','v','j','n'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine EmpathyInstructions
    PolygonComponent EmIPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent EmIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this Module

        The numbers are provided against the terms to be chosen.
        Choose the most appropriate number depicting the emotion.

        Press Spacebar to continue!
    KeyboardComponent EmIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EmpathyTest
    PolygonComponent EPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent EImage
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent EText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        1                       2





        3                       4
    KeyboardComponent EKey
      allowedKeys = '1', '2', '3', '4'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine CDTest
    PolygonComponent CDTPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent CDTImage
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent CDTText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = How do you feel about the image?
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  Routine Wait5000
    PolygonComponent WaitPolygon
      fillColor = darkgreen
      lineColor = darkgreen
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  Routine CDConditions
    PolygonComponent CDCPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent CDCImage
      image [set every repeat] = $ConditionFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent CDCText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = That is how I feel about the image
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  Routine CDResponse
    PolygonComponent CDRPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent CDRText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        How do you feel about the person/logo?

        Press 1 for good

        Press 2 for neutral

        Press 3 for bad
    KeyboardComponent CDRKey
      allowedKeys = '1', '2', '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CDInstructions
    PolygonComponent CDIPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent CDIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the next routine

        Look at the image and let us know how you feel about it

        When asked, Press:
        1> If you feel good about the image
        2> If you feel neutrally about the image
        3> If you feel badly about the image

        Press Spacebar to continue
    KeyboardComponent CDIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SRTTInstructions
    PolygonComponent SRTTIPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent SRTTIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this module!

        You will be shown an image in real time.
        When the image is presented, press Spacebar as fast as you can.
        The image will be shown for a fixed amount of time, hence be fast!

        Press Spacebar to continue
    KeyboardComponent SRTTIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SRTTTest
    PolygonComponent SRTTTPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent SRTTTImage
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent SRTTTKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VariableBlank
    PolygonComponent VBlankPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time
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  Routine PSTInstructions
    PolygonComponent PSTIPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent PSTIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this module!

        You will be shown images in real time.

        Only press Spacebar if you see a white duck you were shown in the previous module.
        The image will be shown for a fixed amount of time, hence be fast!

        Press Y to continue
    KeyboardComponent PSTIKey
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PSTTest
    PolygonComponent PSTPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    ImageComponent PSTImage
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    KeyboardComponent PSTKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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  Routine SDTInstructions
    PolygonComponent SDTIPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent SDTIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this Module!

        You will be shown two shapes with some variations.

        Only press Spacebar if a circle is shown, without any changes.
        The shapes are time limited, hence be fast in your response!

        Press Y to continue.
    KeyboardComponent SDTIKey
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SDTTest
    PolygonComponent SDTPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent SDTImage
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent SDTKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Rating
    PolygonComponent RatingPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    KeyboardComponent SatKey
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent SatRating
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent SatCode
      Code Type = Py
      End Routine:
        if SatKey.keys == '1':
            feedback = One
        elif SatKey.keys == '2':
                feedback = Two
        elif SatKey.keys == '3':
                feedback = Three
        elif SatKey.keys == '4':
                feedback = Four
        else:
                feedback = Five

        if SatKey.keys == '1':
            choice = Pissed
        elif SatKey.keys == '2':
                choice = Sad
        elif SatKey.keys == '3':
                choice = NoFeel
        elif SatKey.keys == '4':
                choice = Happy
        else:
                choice = Excited
  Routine ratingFeedback
    PolygonComponent RFeedPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Feedback
      image [set every repeat] = $feedback
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent ConstText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You selected:
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    TextComponent ChoiceText
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $choice
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  Routine SatInstructions
    PolygonComponent SatPoly
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent SatText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please Rate Your Experience!

        Press 1 to 5 according to your experience, 1 being worst and 5 being best!

        Press Spacebar to go to ratings screen.
    KeyboardComponent SatIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RLInstructions
    PolygonComponent RLIPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent RLIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this Module!

        You will be shown two images.

        Remember, ignore the RED one;

        Please press;
        A for left side choice
        L for Right side choice
        (Esc will quit)

        Let's start with a few practice trials

        Press Spacebar to continue
    KeyboardComponent RLIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RLFeedback
    PolygonComponent RLFPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent RLFCode
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if RLKey.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(RLKey.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent RLFText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine RLPractice
    PolygonComponent RLTPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    PolygonComponent RLLeftPoly
      fillColor [set every repeat] = $letterColor
      nVertices = 10000
      pos = (0.3, 0)
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent RLRightPoly
      fillColor [set every repeat] = $text
      nVertices = 10000
      pos = (-0.3, 0)
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent RLKey
      allowedKeys = 'a', 'l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine RLTestInstructions
    PolygonComponent RLTIPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent RLTIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the RED one itself; press:
        A for left side choice
        L for right side choice
        (Esc will quit)

        Press Spacebar to continue
    KeyboardComponent RLTIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RLSInstructions
    PolygonComponent RLSIPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent RLSIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please press;

        Ignore the word itself;
        A for red LETTERS
        S for green LETTERS
        D for blue LETTERS
        (Esc will quit)

        Let's start with a few practice trials

        Press Spacebar to continue
    KeyboardComponent RLSIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RLSFeedback
    PolygonComponent RLSFPoly
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent RLSCode
      Code Type = Auto->JS
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if RLSKey.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(RLSKey.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent RLSFText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine RLSTest
    PolygonComponent RLSPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent RLSWord
      color [set every repeat] = $letterColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    KeyboardComponent RLSKey
      allowedKeys = 'a', 's', 'd'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine RLTInstructions
    PolygonComponent RLSTPolygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent RLSTText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:

        A for red LETTERS
        S for green LETTERS
        D for blue LETTERS
        (Esc will quit)

        Press Spacebar to continue
    KeyboardComponent RLSTKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine Blank500
  Routine RLSInstructions
  Routine Blank500
  LoopInitiator RLSPLoop loopType="TrialHandler"
    conditionsFile = 11_stimuli_RLwithStroop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('text', 'red'), ('letterColor', 'red'), ('corrAns', 'a'), ('congruent', 'cong')]),
      OrderedDict([('text', 'red'), ('letterColor', 'red'), ('corrAns', 'a'), ('congruent', 'cong')]),
      OrderedDict([('text', 'red'), ('letterColor', 'green'), ('corrAns', 's'), ('congruent', 'incong')]),
      OrderedDict([('text', 'red'), ('letterColor', 'blue'), ('corrAns', 'd'), ('congruent', 'incong')]),
      OrderedDict([('text', 'green'), ('letterColor', 'red'), ('corrAns', 'a'), ('congruent', 'incong')]),
      OrderedDict([('text', 'green'), ('letterColor', 'green'), ('corrAns', 's'), ('congruent', 'cong')]),
      OrderedDict([('text', 'green'), ('letterColor', 'green'), ('corrAns', 's'), ('congruent', 'cong')]),
      OrderedDict([('text', 'green'), ('letterColor', 'blue'), ('corrAns', 'd'), ('congruent', 'incong')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'red'), ('corrAns', 'a'), ('congruent', 'incong')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'green'), ('corrAns', 's'), ('congruent', 'incong')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'blue'), ('corrAns', 'd'), ('congruent', 'cong')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'blue'), ('corrAns', 'd'), ('congruent', 'cong')])]
    Routine RLSTest
    Routine RLSFeedback
  LoopTerminator RLSPLoop
  Routine Blank500
  Routine RLTInstructions
  Routine Blank500
  LoopInitiator RLSTLoop loopType="TrialHandler"
    conditionsFile = 11_stimuli_RLwithStroop.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('text', 'red'), ('letterColor', 'red'), ('corrAns', 'a'), ('congruent', 'cong')]),
      OrderedDict([('text', 'red'), ('letterColor', 'red'), ('corrAns', 'a'), ('congruent', 'cong')]),
      OrderedDict([('text', 'red'), ('letterColor', 'green'), ('corrAns', 's'), ('congruent', 'incong')]),
      OrderedDict([('text', 'red'), ('letterColor', 'blue'), ('corrAns', 'd'), ('congruent', 'incong')]),
      OrderedDict([('text', 'green'), ('letterColor', 'red'), ('corrAns', 'a'), ('congruent', 'incong')]),
      OrderedDict([('text', 'green'), ('letterColor', 'green'), ('corrAns', 's'), ('congruent', 'cong')]),
      OrderedDict([('text', 'green'), ('letterColor', 'green'), ('corrAns', 's'), ('congruent', 'cong')]),
      OrderedDict([('text', 'green'), ('letterColor', 'blue'), ('corrAns', 'd'), ('congruent', 'incong')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'red'), ('corrAns', 'a'), ('congruent', 'incong')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'green'), ('corrAns', 's'), ('congruent', 'incong')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'blue'), ('corrAns', 'd'), ('congruent', 'cong')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'blue'), ('corrAns', 'd'), ('congruent', 'cong')])]
    Routine RLSTest
    Routine Blank500
  LoopTerminator RLSTLoop
  Routine Blank500
  Routine EndScreen
