PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 17_Monetary_Incentive
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Routines
  Routine MIInstructions
    PolygonComponent MIIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent MIIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent MIIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this module!

        You will be shown a set of images in real time.
        When a square is presented on the screen, press Spacebar as fast as you can.
        DO NOT press the spacebar before the square is visible on the screen!
        The square will be shown for a fixed amount of time, hence be fast!

        Press Spacebar to continue
  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine MITest
    PolygonComponent MIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent MILeftCircle
      fillColor = black
      nVertices = 10000
      pos = (0.5, 0)
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent MLRightCircle
      fillColor = black
      nVertices = 10000
      pos = (-0.5, 0)
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent MISquare
      fillColor = yellow
      lineColor = red
      pos [set every repeat] = $(px, py)
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = $startTime
      stopVal [duration (s)] = $endTime
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    KeyboardComponent MIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MIScore
    PolygonComponent MISPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent MISText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        CONGRATULATIONS!!

        You've made <20> point(s)!
Flow
  Routine MIInstructions
  Routine Blank500
  LoopInitiator MILoop loopType="TrialHandler"
    conditionsFile = 12.5_stimuli_monetary_incentive.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('startTime', 0.5), ('endTime', 1), ('circle_Trial', 1), ('px', 0.0), ('py', 0.0)]),
      OrderedDict([('startTime', 0.1), ('endTime', 1), ('circle_Trial', 0), ('px', 0.0), ('py', 0.4)]),
      OrderedDict([('startTime', 0.2), ('endTime', 1), ('circle_Trial', 1), ('px', 0.4), ('py', 0.0)]),
      OrderedDict([('startTime', 0.3), ('endTime', 1), ('circle_Trial', 0), ('px', -0.4), ('py', 0.0)]),
      OrderedDict([('startTime', 0.4), ('endTime', 1), ('circle_Trial', 1), ('px', 0.4), ('py', 0.4)]),
      OrderedDict([('startTime', 0.6), ('endTime', 1), ('circle_Trial', 0), ('px', -0.4), ('py', -0.4)]),
      OrderedDict([('startTime', 0.7), ('endTime', 1), ('circle_Trial', 1), ('px', 0.4), ('py', -0.4)]),
      OrderedDict([('startTime', 0.8), ('endTime', 1), ('circle_Trial', 0), ('px', -0.4), ('py', 0.4)]),
      OrderedDict([('startTime', 0.9), ('endTime', 1), ('circle_Trial', 1), ('px', 0.0), ('py', 0.0)]),
      OrderedDict([('startTime', 1.0), ('endTime', 1), ('circle_Trial', 0), ('px', 0.0), ('py', 0.4)]),
      OrderedDict([('startTime', 1.25), ('endTime', 1), ('circle_Trial', 1), ('px', 0.4), ('py', 0.0)]),
      OrderedDict([('startTime', 1.5), ('endTime', 1), ('circle_Trial', 0), ('px', -0.4), ('py', 0.0)]),
      OrderedDict([('startTime', 1.75), ('endTime', 1), ('circle_Trial', 1), ('px', 0.4), ('py', 0.4)]),
      OrderedDict([('startTime', 2.0), ('endTime', 1), ('circle_Trial', 0), ('px', -0.4), ('py', -0.4)]),
      OrderedDict([('startTime', 1.25), ('endTime', 1), ('circle_Trial', 1), ('px', 0.4), ('py', -0.4)])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
    Routine MITest
  LoopTerminator MILoop
  Routine Blank500
  Routine MIScore
  Routine Blank500
