PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 17_Adaptive_Cambridge_Gambling
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Routines
  Routine ACTInstructions
    PolygonComponent ACTIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent ACTIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ACTITexr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hi! Welcome to this Module!

        There would be two coloured boxes shown to you. One of those coloured box contains a black box. Please select the colour which you believe contains the black box.

        Press 'Left Arrow Key' for Red colour box.
        Press 'Right Arrow Key' for Blue colour box.

        But wait! Every correct choice will make you win 10 points, while every incorrect choice will make you lose 8 points!

        Please select wisely!

        Press Spacebar to continue!
  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ACTTest
    PolygonComponent ACTTPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent ACTTRight
      fillColor [set every repeat] = $boxColorR
      pos = (0.2, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent ACTTLeft
      fillColor [set every repeat] = $boxColorL
      pos = (-0.2, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent ACTTUp
      fillColor [set every repeat] = $boxColorU
      pos = (0, 0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent ACTTDown
      fillColor [set every repeat] = $boxColorD
      pos = (0, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent ACTTKey
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent ACTTRPoly
      fillColor = black
      pos = (-0.6, -0.4)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent ACTTBPoly
      fillColor = black
      pos = (0.6, -0.4)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent ACTTRText
      color = yellow
      letterHeight = 0.1
      pos = (-0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Red
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    TextComponent ACTTBText
      color = yellow
      letterHeight = 0.1
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Blue
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  Routine ACTResult
    PolygonComponent ACTPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent ACTCode
      Code Type = Auto->JS
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      Begin Experiment:
        gainsThisRound=0
        gainsTotal=0
        msg=''
      Begin Routine:
        gainsThisRound=0
        msg=''
        if ACTTKey.corr:
           msg='Response is correct'
           gainsThisRound=gainsThisRound+10
        else:
           msg='Response is incorrect'
           gainsThisRound=gainsThisRound-8

        gainsTotal=gainsTotal+gainsThisRound
        totalScore=gainsTotal
      End Routine:
        thisExp.addData('gainsTotal', gainsTotal)
    TextComponent ACTTResult
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $f'You Won: {str(gainsTotal)} Points       Good Going!'
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  Routine ACTFinalScore
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = $totalScore
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Flow
  Routine ACTInstructions
  Routine Blank500
  LoopInitiator ACTLoop loopType="TrialHandler"
    conditionsFile = 17_stimuli_adaptive_cambridge_gambling.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('boxColorL', 'red'), ('boxColorR', 'red'), ('boxColorU', 'red'), ('boxColorD', 'red'), ('corrAns', 'left')]),
      OrderedDict([('boxColorL', 'red'), ('boxColorR', 'red'), ('boxColorU', 'red'), ('boxColorD', 'blue'), ('corrAns', 'left')]),
      OrderedDict([('boxColorL', 'red'), ('boxColorR', 'red'), ('boxColorU', 'blue'), ('boxColorD', 'red'), ('corrAns', 'left')]),
      OrderedDict([('boxColorL', 'red'), ('boxColorR', 'blue'), ('boxColorU', 'red'), ('boxColorD', 'red'), ('corrAns', 'left')]),
      OrderedDict([('boxColorL', 'blue'), ('boxColorR', 'red'), ('boxColorU', 'red'), ('boxColorD', 'red'), ('corrAns', 'left')]),
      OrderedDict([('boxColorL', 'red'), ('boxColorR', 'red'), ('boxColorU', 'blue'), ('boxColorD', 'blue'), ('corrAns', 'left')]),
      OrderedDict([('boxColorL', 'red'), ('boxColorR', 'blue'), ('boxColorU', 'red'), ('boxColorD', 'blue'), ('corrAns', 'left')]),
      OrderedDict([('boxColorL', 'blue'), ('boxColorR', 'red'), ('boxColorU', 'red'), ('boxColorD', 'blue'), ('corrAns', 'left')]),
      OrderedDict([('boxColorL', 'red'), ('boxColorR', 'blue'), ('boxColorU', 'blue'), ('boxColorD', 'red'), ('corrAns', 'right')]),
      OrderedDict([('boxColorL', 'blue'), ('boxColorR', 'red'), ('boxColorU', 'blue'), ('boxColorD', 'red'), ('corrAns', 'right')]),
      OrderedDict([('boxColorL', 'blue'), ('boxColorR', 'blue'), ('boxColorU', 'red'), ('boxColorD', 'red'), ('corrAns', 'right')]),
      OrderedDict([('boxColorL', 'red'), ('boxColorR', 'blue'), ('boxColorU', 'blue'), ('boxColorD', 'blue'), ('corrAns', 'right')])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
    Routine ACTTest
    Routine ACTResult
  LoopTerminator ACTLoop
  Routine Blank500
