PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 18.5_Ultimatum_Game
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Routines
  Routine UGInstructions
    PolygonComponent UGIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent UGIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are playing against the computer!

        Press Spacebar to continue!
    KeyboardComponent UGIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Black500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine UGTest
    PolygonComponent UGPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent UGInstText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = You're playing against the computer:
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    TextComponent UGWinText
      color = yellow
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $Winning_amt
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  Routine UGTrial
    PolygonComponent UGTPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent UGTDispText
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Congratulations!
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    TextComponent UGTLeftText
      color = orange
      letterHeight = 0.03
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $FixedEntry
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    TextComponent UGTRightText
      color = orange
      letterHeight = 0.03
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $VariableEntry
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    PolygonComponent UGLPoly
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent UGRPoly
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine UGChoice
    PolygonComponent UGCPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent UGCWinText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $TotalEntry
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    TextComponent UGChoiceText
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        You can do one of the following by pressing the number key before them:

        1 -> Steal all the money!
        2 -> Give all the money to the computer!
        3 -> Split the money with the computer!

        Choose wisely, as the computer is doing the same thing at the moment, and you might choose something that may lead you to lose your money.

        Whenever you're ready, choose the appropriate number that you want to do.
    KeyboardComponent UGCKey
      allowedKeys = '1', '2', '3'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine UGWin
    CodeComponent UGWCode
      Code Type = Auto->JS
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      Begin Routine:
        msg=''
        keys = event.getKeys()
        corr = UGCKey.corr

        if keys:
            if corr==1:
                TextColor = 'green'
                msg = 'Yes! You both stole, thus you both win nothing! Thieves!'
            elif corr!=1:
                TextColor = 'red'
                msg = 'No! You stole but computer did not steal, and hence you lose all the money! Idiot!'
            elif corr==2:
                TextColor = 'green'
                msg = 'Yes! You both gave away, thus nobody wins anything! Cowards!'
            elif corr!=2:
                TextColor = 'red'
                msg = 'No! You gave away your money but computer did not, so computer took away all your money! Generous loser!'
            elif corr==3:
                TextColor = 'green'
                msg = 'Yes! You both split, you both get half of the money!'
            elif corr!=3:
                TextColor = 'red'
                msg = 'No! You split, but computer did not, but since you were generous, you get your share!'
    PolygonComponent UGWPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent UGWText
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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Flow
  Routine UGInstructions
  Routine Black500
  LoopInitiator UGLoop loopType="TrialHandler"
    conditionsFile = 18.5_stimuli_ultimatum_game.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Winning_amt', 'You have Rs. 100 in the pot!'), ('FixedEntry', 'You won Rs. 50'), ('VariableEntry', 'Computer won Rs. 50'), ('TotalEntry', "Together you've won Rs. 100"), ('corrAns', 3)]),
      OrderedDict([('Winning_amt', 'You have Rs. 90 in the pot!'), ('FixedEntry', 'You won Rs. 50'), ('VariableEntry', 'Computer won Rs. 40'), ('TotalEntry', "Together you've won Rs. 90"), ('corrAns', 2)]),
      OrderedDict([('Winning_amt', 'You have Rs. 90 in the pot!'), ('FixedEntry', 'You won Rs. 40'), ('VariableEntry', 'Computer won Rs. 50'), ('TotalEntry', "Together you've won Rs. 90"), ('corrAns', 1)]),
      OrderedDict([('Winning_amt', 'You have Rs. 80 in the pot!'), ('FixedEntry', 'You won Rs. 40'), ('VariableEntry', 'Computer won Rs. 40'), ('TotalEntry', "Together you've won Rs. 80"), ('corrAns', 3)]),
      OrderedDict([('Winning_amt', 'You have Rs. 100 in the pot!'), ('FixedEntry', 'You won Rs. 100'), ('VariableEntry', 'Computer won Rs. 0'), ('TotalEntry', "Together you've won Rs. 100"), ('corrAns', 2)]),
      OrderedDict([('Winning_amt', 'You have Rs. 100 in the pot!'), ('FixedEntry', 'You won Rs. 0'), ('VariableEntry', 'Computer won Rs. 100'), ('TotalEntry', "Together you've won Rs. 100"), ('corrAns', 1)])]
    Routine UGTest
    Routine Black500
    Routine UGTrial
    Routine Black500
    Routine UGChoice
    Routine UGWin
    Routine Black500
  LoopTerminator UGLoop
  Routine Black500
