PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 18_Prisoners_Dilemma
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Routines
  Routine PDInstructions
    PolygonComponent PDIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent PDIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are playing against the computer!

        Press Spacebar to continue!
    KeyboardComponent PDIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine PDTest
    PolygonComponent PDPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent PDInstText
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = You're playing against the computer:
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    PolygonComponent PDTopPoly
      fillColor = red
      nVertices = 10000
      pos = (0, 0.2)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent PDDownPoly
      fillColor = green
      nVertices = 10000
      pos = (0, -0.2)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent PDLeftPoly
      fillColor = blue
      nVertices = 10000
      pos = (-0.2, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent PDRightPoly
      fillColor = yellow
      nVertices = 10000
      pos = (0.2, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent PDKey
      allowedKeys = 'left', 'down', 'up', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PDTrial
    PolygonComponent PDTPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent PDTDisplayText
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Congratulations!
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    TextComponent PDTLeftText
      color = orange
      letterHeight = 0.03
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $FixedEntry
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    TextComponent PDTRightText
      color = orange
      letterHeight = 0.03
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $VariableEntry
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    PolygonComponent PDLPoly
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent PDRPoly
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine PDChoice
    PolygonComponent PDCPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent PDCWinText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $TotalEntry
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    TextComponent PDChoiceText
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        You can do one of the following by pressing the number key before them:

        1 -> Steal all the money!
        2 -> Give all the money to the computer!
        3 -> Split the money with the computer!

        Choose wisely, as the computer is doing the same thing at the moment, and you might choose something that may lead you to lose your money.

        Whenever you're ready, choose the appropriate number that you want to do.
    KeyboardComponent PDCKey
      allowedKeys = '1', '2', '3'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine PDWin
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        msg=''
        keys = event.getKeys()
        corr = PDCKey.corr

        if keys:
            if corr==1:
                TextColor = 'green'
                msg = 'Yes! You both stole, thus you both win nothing! Thieves!'
            elif corr!=1:
                TextColor = 'red'
                msg = 'No! You stole but computer did not steal, and hence you lose all the money! Idiot!'
            elif corr==2:
                TextColor = 'green'
                msg = 'Yes! You both gave away, thus nobody wins anything! Cowards!'
            elif corr!=2:
                TextColor = 'red'
                msg = 'No! You gave away your money but computer did not, so computer took away all your money! Generous loser!'
            elif corr==3:
                TextColor = 'green'
                msg = 'Yes! You both split, you both get half of the money!'
            elif corr!=3:
                TextColor = 'red'
                msg = 'No! You split, but computer did not, but since you were generous, you get your share!'

        '''


        elif b == 2 and c == 1:
            msg = 'You gave away, but computer stole. Computer wins all the money!'
        elif b == 2 and c == 3:
            msg = 'You gave away, but computer split. You are more generous, and hence you win all the money!'
        elif b == 3 and c == 1:
            msg = 'You split, but computer stole. Since you are more generous, You win!'
        elif b == 3 and c == 2:
            msg = 'You split, but computer gave away. Since computer was more generous, computer wins all the money!'
        '''
    PolygonComponent PDWPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent PDWText
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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Flow
  Routine PDInstructions
  Routine Blank500
  LoopInitiator PDLoop loopType="TrialHandler"
    conditionsFile = 18_stimuli_prisoners_dilemma.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('FixedEntry', 'You won Rs. 50'), ('VariableEntry', 'Computer won Rs. 50'), ('TotalEntry', "Together you've won Rs. 100"), ('corrAns', 3)]),
      OrderedDict([('FixedEntry', 'You won Rs. 50'), ('VariableEntry', 'Computer won Rs. 40'), ('TotalEntry', "Together you've won Rs. 90"), ('corrAns', 2)]),
      OrderedDict([('FixedEntry', 'You won Rs. 40'), ('VariableEntry', 'Computer won Rs. 50'), ('TotalEntry', "Together you've won Rs. 90"), ('corrAns', 1)]),
      OrderedDict([('FixedEntry', 'You won Rs. 40'), ('VariableEntry', 'Computer won Rs. 40'), ('TotalEntry', "Together you've won Rs. 80"), ('corrAns', 3)]),
      OrderedDict([('FixedEntry', 'You won Rs. 100'), ('VariableEntry', 'Computer won Rs. 0'), ('TotalEntry', "Together you've won Rs. 100"), ('corrAns', 2)]),
      OrderedDict([('FixedEntry', 'You won Rs. 0'), ('VariableEntry', 'Computer won Rs. 100'), ('TotalEntry', "Together you've won Rs. 100"), ('corrAns', 1)])]
    Routine PDTest
    Routine Blank500
    Routine PDTrial
    Routine Blank500
    Routine PDChoice
    Routine PDWin
    Routine Blank500
  LoopTerminator PDLoop
  Routine Blank500
