PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 1_Moral_Emotion
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Routines
  Routine MEInstructions
    PolygonComponent MEIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent MEIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this module

        Please select the most appropriate emotion that you are feeling after the image viewing

        Press Spacebar to continue
    KeyboardComponent MEIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine METest
    PolygonComponent METPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent METImage
      image [set every repeat] = $ImageFile
      pos = (0, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent METKey
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent METSituation
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ParticipantCaption
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    TextComponent METFeel
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        (Press the corresponding number of the emotion)
        Seeing the situation, you feel:
    TextComponent METEmotion
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $EmotionList
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Flow
  Routine MEInstructions
  Routine Blank500
  LoopInitiator MELoop loopType="TrialHandler"
    conditionsFile = 1_stimuli_moral_emotion.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'images_for_stimuli/moral_emotion/image1.jpg'), ('ParticipantCaption', 'YOU ARE: The person who is in pain'), ('EmotionList', '1. Guilt\n2. Shame\n3. Anger\n4. Feeling Bad')]),
      OrderedDict([('ImageFile', 'images_for_stimuli/moral_emotion/image2.jpg'), ('ParticipantCaption', 'YOU ARE: The person who is in pain'), ('EmotionList', '1. Guilt\n2. Shame\n3. Anger\n4. Feeling Bad')]),
      OrderedDict([('ImageFile', 'images_for_stimuli/moral_emotion/image3.jpg'), ('ParticipantCaption', 'YOU ARE: The person who is in pain'), ('EmotionList', '1. Guilt\n2. Shame\n3. Anger\n4. Feeling Bad')]),
      OrderedDict([('ImageFile', 'images_for_stimuli/moral_emotion/image4.jpg'), ('ParticipantCaption', 'YOU ARE: The person who is in pain'), ('EmotionList', '1. Guilt\n2. Shame\n3. Anger\n4. Feeling Bad')]),
      OrderedDict([('ImageFile', 'images_for_stimuli/moral_emotion/image5.jpg'), ('ParticipantCaption', 'YOU ARE: The person who is in pain'), ('EmotionList', '1. Guilt\n2. Shame\n3. Anger\n4. Feeling Bad')])]
    Routine METest
    Routine Blank500
  LoopTerminator MELoop
  Routine Blank500
