PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 2_Emotion_Recognition
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Routines
  Routine ERInstructions
    PolygonComponent ERIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent ERIText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        All the elements in this first series are independent. You are responsible for making informed decisions.


        1. You have to choose the responses which most appropriately describe the emotions that the person in the image is feeling.
        The responses being the numbers '1, 2, 3, 4' and their corresponding emotions.

        2. Your responses would be recorded to provide you with a comprehensive score at the end of the test

        3. This is a timed event, hence leaving the table or thinking for very long will automatically end the experiment

        4. Use of cell phones, internet is not allowed. Also, communication with other people except the researcher is not allowed.


        In case of a problem, raise your hand and a researcher will come to you.


        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.


        Press the Spacebar to continue.
    KeyboardComponent ERIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ERTest
    PolygonComponent ERPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent ERImage
      image [set every repeat] = $ImageFile
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent ERKey
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ERQText
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        (Press the corresponding number of the emotion)
        This face represents:
    TextComponent ERATest
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $EmotionList
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Flow
  Routine ERInstructions
  Routine Blank500
  LoopInitiator ERLoop loopType="TrialHandler"
    conditionsFile = 2_stimuli_emotion_recognition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Rand', 0.7218304870328028), ('ImageFile', 'images for questions/test 1/q2_question_image.jpg'), ('EmotionList', '1.Flirtatiousness\n2.Interest\n3.Happiness\n4.Politeness'), ('CorrAnsValue', 'Happiness'), ('CorrAns', 3)]),
      OrderedDict([('Rand', 0.8355501409493896), ('ImageFile', 'images for questions/test 1/q18_question_image.jpg'), ('EmotionList', '1.Sadness\n2.Shame\n3.Embarrassment\n4.Love'), ('CorrAnsValue', 'Embarrassment'), ('CorrAns', 3)]),
      OrderedDict([('Rand', 0.9634113834858997), ('ImageFile', 'images for questions/test 1/stress.jpg'), ('EmotionList', '1.Guilt\n2.Sadness\n3.Stress\n4.Disgust'), ('CorrAnsValue', 'Stress'), ('CorrAns', 3)]),
      OrderedDict([('Rand', 0.17133049016369406), ('ImageFile', 'images for questions/test 1/q17_question_image.jpg'), ('EmotionList', '1.Happiness\n2.Desire\n3.Politeness\n4.Compassion'), ('CorrAnsValue', 'Politeness'), ('CorrAns', 3)]),
      OrderedDict([('Rand', 0.8007541772043065), ('ImageFile', 'images for questions/test 1/q4_question_image.jpg'), ('EmotionList', '1.Embarrassment\n2.Sadness\n3.Amusement\n4.Shame'), ('CorrAnsValue', 'Embarrassment'), ('CorrAns', 1)])]
    Routine ERTest
    Routine Blank500
  LoopTerminator ERLoop
  Routine Blank500
