PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 3.2_Contextual_Exchange
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Routines
  Routine CEInstructions
    PolygonComponent CEIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent CEIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this module!

        Press Spacebar to continue!
    KeyboardComponent CEIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    PolygonComponent blankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine CETest
    PolygonComponent CEPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent CEImage
      image [set every repeat] = $ImageFile
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent CEContext
      color = yellow
      letterHeight = 0.05
      pos = (0, -0.13)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Situation
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    TextComponent CEInstText
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = The emotion(s) they are feeling:
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    TextComponent CEEmotion
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $EmotionList
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    KeyboardComponent CEKey
      allowedKeys = '1', '2', '3', '4'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine CEInstructions
  Routine Blank500
  LoopInitiator CELoop loopType="TrialHandler"
    conditionsFile = 3.2_stimuli_contextual_exchange.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'images_for_stimuli/contextual_exc/q2_question_image.jpg'), ('Situation', 'He has just learnt that he is going to be a father'), ('EmotionList', '1.Flirtatiousness\n2.Interest\n3.Happiness\n4.Politeness'), ('CorrAns', 3)]),
      OrderedDict([('ImageFile', 'images_for_stimuli/contextual_exc/q4_question_image.jpg'), ('Situation', 'He has just been told that the lady he loves, loves him back'), ('EmotionList', '1.Embarrassment\n2.Sadness\n3.Amusement\n4.Shame'), ('CorrAns', 1)]),
      OrderedDict([('ImageFile', 'images_for_stimuli/contextual_exc/q11_question_image.jpg'), ('Situation', 'He has just learnt that his friend has just lost his job'), ('EmotionList', '1.Compassion\n2.Sadness\n3.Anger\n4.Interest'), ('CorrAns', 1)]),
      OrderedDict([('ImageFile', 'images_for_stimuli/contextual_exc/q13_question_image.jpg'), ('Situation', 'She has just been offered her dream job'), ('EmotionList', '1.Surprise\n2.Interest\n3.Desire\n4.Happiness'), ('CorrAns', 2)]),
      OrderedDict([('ImageFile', 'images_for_stimuli/contextual_exc/q15_question_image.jpg'), ('Situation', 'She has just seen her celebrity crush'), ('EmotionList', '1.Disgust\n2.Love\n3.Contempt\n4.Desire'), ('CorrAns', 4)]),
      OrderedDict([('ImageFile', 'images_for_stimuli/contextual_exc/stress.jpg'), ('Situation', 'She has just found out that her husband knows she has cheated on him, and he is coming home, pissed off'), ('EmotionList', '1.Guilt\n2.Sadness\n3.Stress\n4.Disgust'), ('CorrAns', 3)])]
    Routine CETest
    Routine Blank500
  LoopTerminator CELoop
  Routine Blank500
