PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 3.6_Social_Information_Performance
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Routines
  Routine SIPInstructions
    PolygonComponent SIPIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent SIPIText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this module!

        Press Spacebar to continue!
    KeyboardComponent SIPIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine SIPTest
    PolygonComponent SIPPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent SIPImage
      image [set every repeat] = $ImageFile
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent SIPInstText
      letterHeight = 0.03
      pos = (0, 0.475)
      startVal [time (s)] = 0.0
      text = What is happening in the scene?
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    TextComponent SIPSitText
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Situation
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    TextComponent SIPCondText
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $givenAns
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    KeyboardComponent SIPKey
      allowedKeys = '1', '2', '3', '4'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent SIPCode
      Code Type = Auto->JS
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      Begin Routine:
        SIPCondText.alignText = 'justify'
Flow
  Routine SIPInstructions
  Routine Blank500
  LoopInitiator SIPLoop loopType="TrialHandler"
    conditionsFile = 3.6_stimuli_social_information_performance.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'images_for_stimuli/social_information/stim_1.jpg'), ('Situation', 'The pregnant lady is looking for a job and is about to cross some business people'), ('givenAns', "1. The lady is reaching them unappointed and the employers are indifferent\n2. The lady has appointment but has preplanned to meet them before the interview\n3. The lady is the worker's partner and is about to meet him, who has invited her to meet some people who can offer her a job\n4. The lady is desperate for money, and has seen a bag resting around, and is planning to steal it"), ('CorrAns', 2)]),
      OrderedDict([('ImageFile', 'images_for_stimuli/social_information/stim_2.jpg'), ('Situation', 'The lady in blue is angry that her children have made unnecessary purchases'), ('givenAns', "1. The lady is the mother who only cares about her own expenses\n2. The lady hasn't had her coffee yet and hence is in a bad mood, but plans to take the children out to picnic later\n3. The boy has pulled a prank on their mother, and now she is angry on them, and the boy is gloating and the other siblings are enjoying the scene\n4. The lady is waiting for her partner and her phone is silently taken by the boy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,
      OrderedDict([('ImageFile', 'images_for_stimuli/social_information/stim_3.jpg'), ('Situation', 'The team is going on a celebratory vacation for breaking a big client'), ('givenAns', '1. The lady in yellow is the team leader who is taking them out on her own expenses\n2. The lady in green is the team leader who thinks that the team members must do her chores as she has broken the client\n3. The lady in green is not with the team but is actually a stranger passing through\n4. The couple in the middle is taking  the team out for client celebration and their marriage celebration'), ('CorrAns', 1)]),
      OrderedDict([('ImageFile', 'images_for_stimuli/social_information/stim_4.jpg'), ('Situation', 'The lady in blue is the mother who is scolding her children for being messy while playing'), ('givenAns', '1. The children are brought out by their babysitter in purple, who is careless in taking their care\n2. The two kids did not listen to their elder sibling in purple and now that they are being scolded by their mother, the eldest is rejoicing\n3. The mother is worried that the children would get messy and is thus telling them off\n4. The mother is teaching the twins how to use clay to make stuffs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
    Routine SIPTest
    Routine Blank500
  LoopTerminator SIPLoop
  Routine Blank500
