PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 3_Emotional_Intensity
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Routines
  Routine EIInstructions
    PolygonComponent EIIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent EIIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent EIIText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        All the elements in this second series are independent. You are responsible for making informed decisions.


        You are being presented with the image of a person feeling certain emotion, and underneath it is being displayed a corresponding type of emotion.

        1. You have to choose ‘Y’ – If the emotion displayed in the word is the same as the emotion presented in the image

        2. You have to choose ‘N’ – If the emotion displayed in the word is not the same as the emotion presented in the image.


        You have to choose responses which most appropriately correspond the emotion displayed in the image as well as the word underneath it.


        This is a timed event, hence leaving the table or thinking for very long will automatically end the experiment


        Use of cell phones, internet is not allowed. Also, communication with other people except the researcher is not allowed.


        In case of a problem, raise your hand and a researcher will come to you.


        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.


        Press the Spacebar to continue.
  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine EITest
    PolygonComponent EITPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent EITImage
      image [set every repeat] = $ImageFile
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent EITKey
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent EITInst
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Please choose the correct options from below

        This face represents:

        (Y) Presence of Emotion
        (N) Absence of Emotion
    TextComponent EITCond
      color = yellow
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $EmotionPresent
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Flow
  Routine EIInstructions
  Routine Blank500
  LoopInitiator EILoop loopType="TrialHandler"
    conditionsFile = 3_stimuli_emotional_intensity.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Rand', 0.6733290976639276), ('ImageFile', 'images for questions/test 2/proud 1.jpg'), ('EmotionPresent', 'This face represents PRIDE'), ('CorrAns', 'y')]),
      OrderedDict([('Rand', 0.2914021839374733), ('ImageFile', 'images for questions/test 2/excited.jpg'), ('EmotionPresent', 'This face represents EXCITEDNESS'), ('CorrAns', 'y')]),
      OrderedDict([('Rand', 0.4551865401963596), ('ImageFile', 'images for questions/test 2/flirt.jpg'), ('EmotionPresent', 'This face represents FLIRTATIOUSNESS'), ('CorrAns', 'y')]),
      OrderedDict([('Rand', 0.27264397853691924), ('ImageFile', 'images for questions/test 2/grief.jpg'), ('EmotionPresent', 'This face represents GRIEF'), ('CorrAns', 'y')]),
      OrderedDict([('Rand', 0.2973415951896945), ('ImageFile', 'images for questions/test 2/amused.jpg'), ('EmotionPresent', 'This face represents AMUSEMENT'), ('CorrAns', 'y')])]
    Routine EITest
    Routine Blank500
  LoopTerminator EILoop
  Routine Blank500
