PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': "['A', 'B']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = 4_Face_No_Go
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Routines
  Routine FNGInstructions
    PolygonComponent FNGIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent FNGIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent FNGIText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Images presented here would be present for less than a second, hence make sure to be quick in your responses.


        You would be shown a type of emotion and then a series of images depicting certain emotions.

        1. Press 'Y' if the mentioned emotion and the emotion depicted in the image are the same.

        2. Press nothing if the mentioned emotion and the emotion depicted in the image aren't the same.


        It is a timed exercise, hence be sure to be proactively responsive.


        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.


        Press Spacebar to continue
  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine FNGTextEmo
    PolygonComponent FNGTPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent FNGTText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Emotion
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  Routine FNGTest
    PolygonComponent FNGPoly
      fillColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent FNGImage
      image [set every repeat] = $ImageFile
      pos = (0, 0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    TextComponent FNGText
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text:
        (Y) Yes
    KeyboardComponent FNGKey
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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  Routine FNGCode
    CodeComponent FNGCCode
      Code Type = Auto->JS
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      Begin Experiment:
        from numpy.random import choice

        control_blocks = ['4_stimuli_fng_1.xlsx', '4_stimuli_fng_2.xlsx', '4_stimuli_fng_3.xlsx']
        shuffle(control_blocks) # randomise order
Flow
  Routine FNGInstructions
  Routine Blank500
  LoopInitiator FNGMainLoop loopType="TrialHandler"
    conditionsFile = 4_stimuli_face_no_go.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('EmotionFile', 'Main_Stimuli_Test3.xlsx'), ('Emotion', 'The emotion now:\nHAPPY'), ('rowStart', 0), ('rowEnd', 8)]),
      OrderedDict([('EmotionFile', 'Main_Stimuli_Test3.xlsx'), ('Emotion', 'The emotion now: \nSAD'), ('rowStart', 8), ('rowEnd', 16)]),
      OrderedDict([('EmotionFile', 'Main_Stimuli_Test3.xlsx'), ('Emotion', 'The emotion now: \nNONE/NEUTRAL'), ('rowStart', 16), ('rowEnd', 25)])]
    Routine FNGCode
    Routine FNGTextEmo
    LoopInitiator FNGTestLoop loopType="TrialHandler"
      Selected rows = $choice(8, size=8, replace=False)
      conditionsFile = $control_blocks.pop()
      loopType = random
      nReps = 1
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      Routine FNGTest
    LoopTerminator FNGTestLoop
    Routine Blank500
  LoopTerminator FNGMainLoop
