PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 5_Word_No_Go
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Routines
  Routine WNGInstructions
    PolygonComponent WNGIPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent WNGIText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Words presented here would be present for less than a second, hence make sure to be quick in your responses.


        You would be shown a type of emotion and then a series of words depicting certain emotions.


        1. Press ‘Y’ if the mentioned emotion and the emotion depicted in the word are the same.

        2. Press nothing if the mentioned emotion and the emotion depicted in the word aren't the same.


        It is a timed exercise, hence be sure to be proactively responsive.

        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.

        Press Spacebar to continue
    KeyboardComponent WNGIKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WNGTextEmo
    PolygonComponent WNGTPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent WNGTText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Emotion
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  Routine WNGTest
    PolygonComponent WNGPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent WNGWord
      color = yellow
      letterHeight = 0.2
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $WordFile
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    TextComponent WNGText
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text = (Y) Yes
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    KeyboardComponent WNGKey
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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  Routine WNGCode
    CodeComponent WNGCCode
      Code Type = Auto->JS
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      Begin Experiment:
        from numpy.random import choice

        control_blocks = ['5_stimuli_wng_1.xlsx', '5_stimuli_wng_2.xlsx', '5_stimuli_wng_3.xlsx']
        shuffle(control_blocks) # randomise order
Flow
  Routine WNGInstructions
  Routine Blank500
  LoopInitiator WNGMainLoop loopType="TrialHandler"
    conditionsFile = 5_stimuli_word_no_go.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('EmotionFile', 'Main_Stimuli_Test4.xlsx'), ('Emotion', 'The emotion now:\nHAPPY'), ('rowStart', 0), ('rowEnd', 8)]),
      OrderedDict([('EmotionFile', 'Main_Stimuli_Test4.xlsx'), ('Emotion', 'The emotion now: \nSAD'), ('rowStart', 8), ('rowEnd', 16)]),
      OrderedDict([('EmotionFile', 'Main_Stimuli_Test4.xlsx'), ('Emotion', 'The emotion now: \nNONE/NEUTRAL'), ('rowStart', 16), ('rowEnd', 25)])]
    Routine WNGCode
    Routine WNGTextEmo
    LoopInitiator WNGTestLoop loopType="TrialHandler"
      Selected rows = $choice(8, size=8, replace=False)
      conditionsFile = $control_blocks.pop()
      loopType = random
      nReps = 1
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      Routine WNGTest
    LoopTerminator WNGTestLoop
    Routine Blank500
  LoopTerminator WNGMainLoop
