PsychoPy2experiment version="2020.1.3"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = test5
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Routines
  Routine EndScreen
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        expClock = core.Clock()
      Begin Routine:
        msg = "Total time : %.2f" %(expClock.getTime()/60.0)
    PolygonComponent polyEnd
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent textCode
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $msg
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    TextComponent textEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Thank You for your time!

        Please meet the researcher before leaving the experiment desk.
  Routine initCode
    CodeComponent codeInit
      Code Type = Py
      Begin Experiment:
        import random, xlrd

        #randomize the seed
        random.seed()

        #stimulus file
        infile = 'Word_Stimuli_Test5.xlsx'

        #num of study items
        num_study = 30

        #num of test items
        num_test=60

        #total number of items
        num_items = 60
      Begin Routine:
        #access the xls the stimulus file
        inbook = xlrd.open_workbook(infile)
        insheet = inbook.sheet_by_index(0)

        #arrays for our stimuli
        word = []

        #read the stimuli from our sheet
        for rowx in range(1,num_items+1):

            #read ub tge values of all columns on this row
            row = insheet.row_values(rowx)

            #print out the values of column A for this row
            #print row[0]

            #saving the word to the word array
            word.append(row[0])

        #randomize the order of the word array
        random.shuffle(word)

        #arrays for our final stimuli
        word_item =[]
        old_new = []
        word_color = []

        #create in final stimulus list
        for i in range(num_test):

            #assign a word item from the word list
            word_item.append(word[i])

            #determine the old/new status of items
            if i<30:
                old_new.append('old')
            else:
                old_new.append('new')

            #determine the color of the items
            if i <15:
                word_color.append('yellow')
            elif i<30:
                word_color.append('red')
            else:
                word_color.append('')

            #user output for debug purposes
            #print 'item number '+str(i)+': '+word_item[i]+' '+word_color[i]+' '+old_new[i]
  Routine ImageTrial
    PolygonComponent polyStudy1
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent imageTest6
      image [set every repeat] = $ImageFile
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Test6Instructions
    PolygonComponent polyTest6
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textNewTest6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        All the elements in this sixth series are independent. You are responsible for making informed decisions.


        This is another memory experiment.

        For the first phase, you would be shown a series of images, that would come and go very fast, and you have to try and memorize the most you can.

        For the second phase, you would be shown another series of images, and you have to try and recognize the images from the midst of many images.

        1. Press ‘Y’ if the image is recognizable
        2. Press ‘N’ if the image is new

        This is a timed event, hence leaving the table or thinking for very long will automatically end the experiment

        Use of cell phones, internet is not allowed. Also, communication with other people except the researcher is not allowed.


        In case of a problem, raise your hand and a researcher will come to you.


        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.


        Press the Spacebar to continue.
    KeyboardComponent keyTest6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ImageWaitScreen
    PolygonComponent poly19
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textWaitImage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        If you have memorized the images,

        Press Spacebar to continue
    KeyboardComponent keyRespWait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test3Instructions
    PolygonComponent poly7
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent text3instructions
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Images presented here would be present for less than a second, hence make sure to be quick in your responses.


        You would be shown a type of emotion and then a series of images depicting certain emotions.

        1. Press 'Y' if the mentioned emotion and the emotion depicted in the image are the same.

        2. Press nothing if the mentioned emotion and the emotion depicted in the image aren't the same.


        It is a timed exercise, hence be sure to be proactively responsive.


        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.


        Press Spacebar to continue
    KeyboardComponent keytest3inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine studyCode
    CodeComponent codeStudy
      Code Type = Auto->JS
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      Begin Experiment:
        #create a list of the order in which to show study items
        study_order = range(num_study)

        list=[]
        a=list.append(study_order)
        #randomize the order of study list items
        random.shuffle(a)

        #current study trial
        study_trial = 0
      Begin Routine:
        #assignin the study item
        WordItem = word_item[study_order[study_trial]]

        WordColor = word_color[study_order[study_trial]]

        #log study information to data file
        thisExp.addData('WordItem', WordItem)
        thisExp.addData('WordColor', WordColor)
        thisExp.addData('Study_Trial', study_trial)
        thisExp.addData('Study_Order', study_order[study_trial])

        #increment the current study item
        study_trial +=1
  Routine TestTrial
    PolygonComponent poly9
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_Stimuli
      image [set every repeat] = $ImageFile
      pos = (0, 0.5)
      size = (1,1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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    TextComponent textgo_nogo
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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      text:
        (Y) Yes
    KeyboardComponent keygo_nogo
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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  Routine StudyTrial
    PolygonComponent poly16
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent textTest6
      color [set every repeat] = $WordColor
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $WordItem
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  Routine TrialTest5
    PolygonComponent polyTest
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textTestWord
      letterHeight = 0.3
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    TextComponent textTestResp
      letterHeight = 0.1
      opacity = 0.5
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        (Y) Repeated

        (N) Not-Repeated
    KeyboardComponent keyTestResp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test5Instructions
    PolygonComponent poly13
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textTest5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        All the elements in this fifth series are independent. You are responsible for making informed decisions.


        This is a memory experiment; hence flex your memory muscles!

        For the first phase, you would be shown a series of words, that would come and go very fast, and you have to try and memorize the most you can.

        For the second phase, you would be shown another series of words, and you have to try and recognize the words from the midst of many words.

        1. Press ‘Y’ if the word is recognizable
        2. Press ‘N’ if the word is new

        This is a timed event, hence leaving the table or thinking for very long will automatically end the experiment

        Use of cell phones, internet is not allowed. Also, communication with other people except the researcher is not allowed.


        In case of a problem, raise your hand and a researcher will come to you.


        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.


        Press the Spacebar to continue.
    KeyboardComponent keyTest5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test2Instructions
    PolygonComponent poly5
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textStudyTest2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        All the elements in this second series are independent. You are responsible for making informed decisions.


        You are being presented with the image of a person feeling certain emotion, and underneath it is being displayed a corresponding type of emotion.

        1. You have to choose ‘Y’ – If the emotion displayed in the word is the same as the emotion presented in the image

        2. You have to choose ‘N’ – If the emotion displayed in the word is not the same as the emotion presented in the image.


        You have to choose responses which most appropriately correspond the emotion displayed in the image as well as the word underneath it.


        This is a timed event, hence leaving the table or thinking for very long will automatically end the experiment


        Use of cell phones, internet is not allowed. Also, communication with other people except the researcher is not allowed.


        In case of a problem, raise your hand and a researcher will come to you.


        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.


        Press the Spacebar to continue.
    KeyboardComponent keyStudyTest2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test4Instructions
    PolygonComponent poly10
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent text4Instructions
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Words presented here would be present for less than a second, hence make sure to be quick in your responses.


        You would be shown a type of emotion and then a series of words depicting certain emotions.


        1. Press ‘Y’ if the mentioned emotion and the emotion depicted in the word are the same.

        2. Press nothing if the mentioned emotion and the emotion depicted in the word aren't the same.


        It is a timed exercise, hence be sure to be proactively responsive.

        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.

        Press Spacebar to continue
    KeyboardComponent keytest4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testCode
    CodeComponent codeTest
      Code Type = Py
      Begin Experiment:
        test_order = range(num_test)

        random.shuffle(test_order)

        test_trial = 0
      Begin Routine:
        #assignin the study item
        WordItem = word_item[test_order[test_trial]]

        WordColor = word_color[test_order[test_trial]]

        thisExp.addData('WordItem', WordItem)
        thisExp.addData('WordColor', WordColor)
        thisExp.addData('Test_Trial', test_trial)
        thisExp.addData('Test_Order', test_order[test_trial])

        #increment the current study item
        test_trial +=1
  Routine StudyTCode
    CodeComponent codeTStudy
      Code Type = Auto->JS
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      Begin Experiment:
        #creates a list of the order in which to show study items
        study_order1 = list(range(num_study1))

        #randomize the order of study list items
        random.shuffle(study_order1)

        #current study trial
        study_trial1 = 0
      Begin Routine:
        #assigning the study item
        ImageFile = word_item1[study_order1[study_trial1]]

        #log study information to data file
        thisExp.addData('ImageFile', ImageFile)
        thisExp.addData('Study_Trial', study_trial1)
        thisExp.addData('Study_Order', study_order1[study_trial1])

        #increment the current item counter
        study_trial1 +=1
  Routine TrialTest
    PolygonComponent poly12
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    TextComponent textemotion
      color = yellow
      letterHeight = 0.3
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $WordFile
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    TextComponent text
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text = (Y) Yes
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    KeyboardComponent keytest4output
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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  Routine ImageTest
    PolygonComponent poly18
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent imageNewTest6
      image [set every repeat] = $ImageFile
      pos = (0, 0.5)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent textTest6Resp
      letterHeight = 0.1
      opacity = 0.5
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        (Y) Repeated

        (N) Not-Repeated
    KeyboardComponent keyNewTest6
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WaitScreen
    PolygonComponent polyWait
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textWait
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        If you have memorized the words,

        Press Spacebar to continue
    KeyboardComponent keyWait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test1Instructions
    PolygonComponent poly3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textStudytest1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        All the elements in this first series are independent. You are responsible for making informed decisions.


        1. You have to choose the responses which most appropriately describe the emotions that the person in the image is feeling.
        The responses being the numbers '1, 2, 3, 4' and their corresponding emotions.

        2. Your responses would be recorded to provide you with a comprehensive score at the end of the test

        3. This is a timed event, hence leaving the table or thinking for very long will automatically end the experiment

        4. Use of cell phones, internet is not allowed. Also, communication with other people except the researcher is not allowed.


        In case of a problem, raise your hand and a researcher will come to you.


        If you have a problem understanding the instructions, call the researcher for explanation. DO NOT start the experiment before completely understanding the experiment process.


        Press the Spacebar to continue.
    KeyboardComponent keyStudytest1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test1
    PolygonComponent poly4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent imageStudy
      image [set every repeat] = $ImageFile
      pos = (0, 0.5)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyStudy
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textStudytext
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        (Press the corresponding number of the emotion)
        This face represents:
    TextComponent textStudy
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $EmotionList
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  Routine Test3
    PolygonComponent poly8
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textemotionlist
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Emotion
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  Routine Test2
    PolygonComponent poly6
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent imageStudy2
      image [set every repeat] = $ImageFile
      pos = (0, 0.5)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyStudy2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textStudyval
      letterHeight = 0.09
      pos = (0, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $EmotionPresent
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    TextComponent textStudyans2
      letterHeight = 0.08
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
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      text:
        Please choose the correct options from below

        This face represents:

        (Y) Presence of Emotion
        (N) Absence of Emotion
  Routine Test4
    PolygonComponent poly11
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textemotionword
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Emotion
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  Routine inCode
    CodeComponent codeIn
      Code Type = Auto->JS
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      Begin Experiment:
        import random, xlrd

        #randomize the seed
        random.seed()

        #stimulus file
        infile1 = '6_stimuli_face_memory_recognition.xlsx'

        #number of study items
        num_study1 = 30

        #number of test items
        num_test1 = 60

        #total number of items
        num_items1 = 60
      Begin Routine:
        #access the stimulus file
        inbook1 = xlrd.open_workbook(infile1)
        insheet1 = inbook1.sheet_by_index(0)

        #arrays for our stimuli
        word1 = []

        #read the stimuli from our sheet
        for rowx1 in range(1,num_items1+1):

            #read in the values of all columns on this row
            row1 = insheet1.row_values(rowx1)

            #print out the value of column A for this row
            #print row1[0]

            #saving the word to the word array
            word1.append(row1[0])

        #randomize the order of the word array
        random.shuffle(word1)

        #arrays for our final array
        word_item1 =[]
        old_new1 = []

        #create the final stimulus list
        for i1 in range(num_test1):

            #assign a word item from the word list
            word_item1.append(word1[i1])

            #determine the old/new status of items
            if i1<30:
                old_new1.append('old')
            else:
                old_new1.append('new')

            #user output
            #print 'item number '+str(i1)+' '+word_item1[i1]+' '+old_new1[i1]
  Routine TestTCode
    CodeComponent codeTTest
      Code Type = Auto->JS
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      Begin Experiment:
        test_order1 = list(range(num_test1))

        random.shuffle(test_order1)

        test_trial1 = 0
      Begin Routine:
        #assigning the study item
        ImageFile = word_item1[test_order1[test_trial1]]

        #log study information to data file
        thisExp.addData('ImageFile', ImageFile)
        thisExp.addData('Test_Trial', test_trial1)
        thisExp.addData('Test_Order', test_order1[test_trial1])

        #increment the current item counter
        test_trial1 += 1
  Routine Blank500
    PolygonComponent poly2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent textBlank500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WelcomeScreen
    PolygonComponent poly1
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to Our Experiment


        Thank you for agreeing to participate in today’s experiment.

        Please have a seat with a researcher before beginning the experiment.

        You are about to participate in a
        decision-making experiment.

        Now that the experiment has started, please do not talk or in any way
        communicate with other participants during this experiment.

        Please remember to turn off your cell
        phones.

        If you have a
        question or problem at any point in today’s experiment, please raise your hand and a researcher will come to
        you.


        Press the Spacebar to continue
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine Blank500
  Routine Test6Instructions
  Routine inCode
  Routine Blank500
  LoopInitiator ImageStudy loopType="TrialHandler"
    loopType = random
    nReps = $num_study1
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    Routine StudyTCode
    Routine ImageTrial
    Routine Blank500
  LoopTerminator ImageStudy
  Routine Blank500
  Routine ImageWaitScreen
  Routine Blank500
  LoopInitiator NewTestImage loopType="TrialHandler"
    loopType = random
    nReps = $num_test1
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    Routine TestTCode
    Routine ImageTest
    Routine Blank500
  LoopTerminator NewTestImage
  Routine Blank500
  Routine EndScreen
