PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = WelcomeAndEnd
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Routines
  Routine WelcomeScreen
    PolygonComponent WelcomePoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment

        Press Spacebar to continue
    KeyboardComponent WelcomeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    PolygonComponent BlankPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine EndScreen
    PolygonComponent EndPoly
      fillColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent EndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part in the experiment.

        Whenever you are done, please press Spacebar for the end of the experiment.

        Thanks again!
    KeyboardComponent EndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine Blank500
  Routine EndScreen
